<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Metabolomics\Device File\96LT w Vac Flt Stn_v4.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 100ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 100ul' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 125ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 125ul' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='1in10 Extraction' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 100ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 100ul' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 125ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 125ul' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Extraction Solvent' />
					<Parameter Name='Plate type' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
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					<Parameter Name='Use single instance of plate' Value='1' />
					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='2' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='2' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Filter Plate' />
					<Parameter Name='Plate type' Value='96-well Filter microplate polypropylene 200933-100' />
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					<Parameter Name='Use single instance of plate' Value='1' />
					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 100ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 100ul' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 125ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 125ul' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Samples' />
					<Parameter Name='Plate type' Value='24-well 1.5 mL Eppendorf tube' />
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					<Parameter Name='Use single instance of plate' Value='1' />
					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 100ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 100ul' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Solvent Extraction 125ul' />
						<Parameter Category='Static labware configuration' Name='Display confirmation' Value='Don&apos;t display' />
						<Parameter Category='Static labware configuration' Name='1' Value='Reservoir, Seahorse 201254-100, PP, no walls, pyramid bottoms' />
						<Parameter Category='Static labware configuration' Name='2' Value='96-well Filter microplate polypropylene 200933-100' />
						<Parameter Category='Static labware configuration' Name='3' Value='&lt;use default&gt;' />
						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Solvent Extraction 125ul' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips 24 Configuration' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box Standard' />
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					<Parameter Name='Use single instance of plate' Value='1' />
					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Solvent Extraction 100ul' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips 24 Configuration' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Extraction Solvent' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='200' />
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						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Mix cycles' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Extraction Solvent' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='10' />
						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='20' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='South/North' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips 24 Configuration' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake plate' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='Timed' />
						<Parameter Category='' Name='RPM' Value='1200' />
						<Parameter Category='' Name='Duration' Value='900' />
						<Parameter Category='' Name='Type' Value='Circle Clockwise' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Agilent Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Solvent Extraction 125ul' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips 24 Configuration' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Extraction Solvent' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='200' />
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						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Mix cycles' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Extraction Solvent' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='125' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='10' />
						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.5' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='20' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='South/North' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips 24 Configuration' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Shake plate' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='Timed' />
						<Parameter Category='' Name='RPM' Value='1200' />
						<Parameter Category='' Name='Duration' Value='900' />
						<Parameter Category='' Name='Type' Value='Circle Clockwise' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Agilent Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>