<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Metabolomics\Device File\96LT w Vac Flt Stn_v4.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='C:\VWorks Workspace\Metabolomics\Form File\Aliquoting to Fresh Tubes.VWForm' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='1' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='var volume = volume' />
					<Parameters >
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot 1' />
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						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
						<Parameter Category='Static labware configuration' Name='5' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot 1' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Aliquot Samples to Tubes' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot 1' />
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						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
						<Parameter Category='Static labware configuration' Name='5' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot 1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='8' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='8' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Tips in 24 config' />
					<Parameter Name='Plate type' Value='96 V11 LT250 Tip Box Standard' />
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					<Parameter Name='Use single instance of plate' Value='1' />
					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot 1' />
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						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
						<Parameter Category='Static labware configuration' Name='5' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot 1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Samples' />
					<Parameter Name='Plate type' Value='24-well 1.5 mL Eppendorf tube' />
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					<Parameter Name='Use single instance of plate' Value='1' />
					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >1</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot 1' />
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						<Parameter Category='Static labware configuration' Name='4' Value='24-well 1.5 mL Eppendorf tube' />
						<Parameter Category='Static labware configuration' Name='5' Value='24-well 1.5 mL Eppendorf tube' />
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						<Parameter Category='Static labware configuration' Name='8' Value='96 V11 LT250 Tip Box Standard' />
						<Parameter Category='Static labware configuration' Name='9' Value='&lt;use default&gt;' />
					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot 1' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Agilent Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
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						<Parameter Category='' Name='Device to use' Value='Agilent Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Empty Tubes' />
					<Parameter Name='Plate type' Value='24-well 1.5 mL Eppendorf tube' />
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					<Parameter Name='Use single instance of plate' Value='1' />
					<Parameter Name='Automatically update labware' Value='1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Aliquot 1' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips in 24 config' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Samples' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' TaskParameterScript='=volume' Value='225' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='0' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='10' />
						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Empty Tubes' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='MeOH:DCM dispense' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Tips in 24 config' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Devices >
					<Device Device_Name='Agilent Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>